PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1300, 700]
  expName = WordPriming
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Admin/Downloads/Priming_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'frantic'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'dancer'},
      {'Study_word': 'grate'},
      {'Study_word': 'tshirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'gander'},
      {'Study_word': 'walk'},
      {'Study_word': 'cruise'},
      {'Study_word': 'police'},
      {'Study_word': 'keys'},
      {'Study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Admin/Downloads/Testing_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'd_n_er', 'reference': 'dancer', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'g_at_', 'reference': 'grate', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 't_hi_t', 'reference': 'tshirt', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': '_ouse', 'reference': 'mouse', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'g_n_er', 'reference': 'gander', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'c_s_', 'reference': 'case', 'old_new': 'old', 'Prime_condition': 'n'},
      {'test_word': 'c_ui_e', 'reference': 'cruise ', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'po_i_e', 'reference': 'police', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'k_y_', 'reference': 'keys', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'p_s_er', 'reference': 'poster', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'b_ar_', 'reference': 'board', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'm_rb_e', 'reference': 'marble', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': '_h_ne', 'reference': 'phone', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': '_oo_', 'reference': 'book', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'f_an_ic', 'reference': 'frantic', 'old_new': 'old', 'Prime_condition': 'p'},
      {'test_word': 'ta_l_', 'reference': 'table', 'old_new': 'new', 'Prime_condition': 'n'},
      {'test_word': 'pe_c_l', 'reference': 'pencil', 'old_new': 'new', 'Prime_condition': 'n'}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
    Routine test
  LoopTerminator trials_2
