PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1100, 1100]
  expName = adap_stair
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent var_5050
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5: #50:50 probablity
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('level', direction)
        thisExp.addData('key_resp.corr', key_resp.corr)
    PolygonComponent fix
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    GratingComponent grating
      mask = gauss
      ori [set every repeat] = direction
      sf = 6
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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Flow
  LoopInitiator stair loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 1
    start value = 10
    step sizes = [2,1,3,0.5]
    step type = lin
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    Routine trial
  LoopTerminator stair
