PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = new
  frameRateMsg = The experiment is loading...
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        hello!

        Press c for BLUE rectangle.
        Press n for RED rectangle.

        Press SPACE to start.
    KeyboardComponent start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine fixation
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    PolygonComponent fix
      fillColor = white
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = pix
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  Routine image
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import pandas as pd
      Begin Routine:
        sets = ['low.xlsx', 'high.xlsx', 'neutral.xlsx']
        set_to_present = random.choice(sets)
        files = pd.read_excel(set_to_present)

        image_paths = files['Path'].tolist()
        priming_image = random.choice(image_paths)
      End Routine:
        thisExp.addData('Arousal_Condition', set_to_present)
        thisExp.addData('priming_image', priming_image)
    ImageComponent emo
      image [set every repeat] = $priming_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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  Routine exp
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    PolygonComponent stimulus
      anchor = bottom-center
      fillColor [set every repeat] = $shade
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0.3)
      shape = rectangle
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'c','n'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [time (s)] = 1
      storeCorrect = True
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  Routine Conclusion
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for being a part of this experiment. It studies the influence of emotions on decision making.

        Press SPACE to end the experiment.
    KeyboardComponent end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if key_resp.corr == 1:
            msg = 'correct!'
        else:
            msg = 'incorrect!'
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine pat
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    ImageComponent image_paths
      image [set every repeat] = $Path
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 100
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    conditions:
      [{'shade': 'BLUE', 'corr': 'c'},
      {'shade': 'RED', 'corr': 'n'}]
    Routine fixation
    Routine image
    Routine exp
    Routine Feedback
  LoopTerminator trials
  Routine Conclusion
